{
    "actions": {
        "acqdatetime": {
            "filters": {},
            "params": {}
        },
        "header_series": {
            "filters": {},
            "params": {
                "auto_suffix": false,
                "rgbchannel": "B"
            }
        },
        "ocr_series": {
            "filters": {},
            "params": {
                "auto_suffix": false,
                "ocr_regions": {},
                "rgbchannel": "B"
            }
        },
        "qc_series": {
            "filters": {},
            "params": {
                "auto_suffix": false,
                "circle_fitfrac": 0.3333333333333333,
                "cluster_fminsize": 300.0,
                "cluster_mode": "all_middle",
                "f_dead": 0.3,
                "f_weak": 0.5,
                "hcor_px": 3,
                "init_pt_x0y0x1y1": [
                    130,
                    36,
                    893,
                    767
                ],
                "rgbchannel": "B",
                "signal_thresh": 0,
                "vcor_px": 0
            }
        }
    },
    "cfgformat": "20180910",
    "comments": {
        "author": "Arnold Schilham, UMCU",
        "creator": "generate_config_json.py version 20180912",
        "description": "US/AirReverberations2 for Siemens Sequoia",
        "usage": [
            "  \"OCR_xxx\": \"xywh\": \"10;30;50;25\" # x;y;width;height of bounding box of OCR_xxx",
            "  \"OCR_xxx\": \"prefix\": \"TI\" # text in bounding box of OCR_xxx starts with this and this should be stripped",
            "  \"OCR_xxx\": \"suffix\": \"mm\" # text in bounding box of OCR_xxx ends with this and this should be stripped",
            "  \"OCR_xxx\": \"type\": \"float\" # after stripping prefix and suffix, text should be converted to this data type",
            "\n",
            "  If \"OCR_probeID\" is specified, OCR will be used to find an identifier for values, info from the dicom headers is used",
            "\n"
        ],
        "version": "20200803"
    },
    "info": {
        "acqdatetime": {
            "params": {}
        },
        "header_series": {
            "params": {
                "auto_suffix": "add a probename as suffix to all results (True)",
                "rgbchannel": "use this R-G-B channel (B)"
            }
        },
        "ocr_series": {
            "params": {
                "auto_suffix": "add a probename as suffix to all results (True)",
                "ocr_regions": {},
                "rgbchannel": "use this R-G-B channel (B)"
            }
        },
        "qc_series": {
            "params": {
                "auto_suffix": "add a probename as suffix to all results (True)",
                "circle_fitfrac": "use only this central fraction for circle fitting",
                "cluster_fminsize": "ignore clusters smaller than imwidth*imheight/fminsize",
                "cluster_mode": "mode of connected components analysis; either all_middle (def) or largest_only",
                "f_dead": "below this fraction of avg signal, the element is considered dead (.5)",
                "f_weak": "below this fraction of avg signal, the element is considered weak (.5)",
                "hcor_px": "default lines to exclude from left and right when making profiles (10)",
                "init_pt_x0y0x1y1": "restrict initial search of reverb pattern in px",
                "rgbchannel": "use this R-G-B channel (B)",
                "signal_thresh": "threshold on pixelvalues for reverberation patterns; use>0 for noisy data (0)",
                "vcor_px": "default lines to exclude from top and bottom when making profiles (10)"
            }
        }
    }
}